CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "png")
    Name to assign these images:raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:raw
    Name the primary objects to be identified:raw_seg
    Typical diameter of objects, in pixel units (Min,Max):7,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:raw_seg
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

OverlayOutlines:[module_num:7|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#0080FF
    Select objects to display:raw_seg

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cellprofiler
    Saved file format:png
    Output file location:Default Input Folder sub-folder|OneDrive\\Desktop
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
